// Pieces of macros for RootCell treatments

// Trouve les centroids des steles et sauvegarde un ROI contenant tous les centres des images d'un dossier
run("Close All");
cleanRois();
showMessage("Verify the segmentation. Just check every image, then click ok.\nIf you notice something bad (some missing cells), note the title (image name), and the bad contour,\nMaybe you have taken a cell more or less with your global contours. You can change them and rerun the process.");
showMessage("First, select an image in the 1_Source directory\nSelect any image, whatever, it is just used to find the parent folder.\nThe images which don't have one of the three expected roi will make the macro fail.");
open();
fileName = File.nameWithoutExtension;
dirName = File.directory;
maindir=File.getParent(dirName);
dir1=maindir+"/1_Source";
dirRoi=maindir+"/3_CellRoi";
list = getFileList(dir1);
N=list.length;
run("Close All");

radiusSteleStandard=5;//Measured on a bunch of images

run("Colors...", "foreground=white background=black selection=magenta");


for (i=0; i<N; i++) {
	print(i+" "+list[i]);
	run("Close All");
	cleanRois();
	//Open and prepare image
	prepareImage(dir1+"/"+list[i]);
	roiManager("open", dirRoi +"/"+ list[i]+".zip");
	roiManager("open", maindir+"/2_AreaRoi" +"/"+ list[i]+"cortex_convexhull.zip");
	roiManager("show all");
	waitForUser;
}



run("Close All");
cleanRois();
showMessage("Finished");

function cleanRois(){
	if (roiManager("count")>0){
		roiManager("Deselect");
		roiManager("Delete");
	}
}


function getCoordsOfPointInRoi(path){
	tab=newArray(2);
	roiManager("open", path);
	roiManager("Select", 0);
	Roi.getCoordinates(xpoints, ypoints);
	roiManager("Delete");
	tab[0]=xpoints[0];
	tab[1]=ypoints[0];
	return tab;
}

function prepareImage(path){
	open(path);
	run("8-bit");
	run("Enhance Contrast", "saturated=0.35");
	run("Apply LUT");
}

